//************************************************
// FILE NAME : connect.hoc
// 2015.04.28
// Heewon Park
//************************************************

//************************************************
// MODIFICATION HISTORY
//************************************************
//
//
//


//************************************************
// FUNCTION LIST
//************************************************
//
//************************************************

objref rnclist
rnclist = new List()
proc mkPreSynapseOnReceptor(){local i localobj syn, nil, nc
    gid_base = 1000000
    gid_cnt  = 0
    for i=0, rns.count()-1{
	forsec rns.object(i).axonlist{
	    nc = new NetCon(&v(0.5),nil) 
	    nc.threshold = 1
	    syn_gid = gid_base + gid_cnt
	    pc.set_gid2node(syn_gid , pc.id)
	    pc.cell(syn_gid, nc)
	    rnclist.append(nc)
	    gid_cnt += 1
	}
    }
}

proc connectRNtoOthers(){
    mkPreSynapseOnReceptor()
    pc.barrier()
    mkPostSynapse()
}

proc 